// Macro to take nuclei from Ch1, vessels from Ch2,
// segment each and use Morphological reconstruction
// to generate an output with just vessels overlapping nuclei
// Dale Moulding UCL GOS ICH Light Microscopy facility. April 2018

// segment cells / nuclei
	run("Duplicate...", "title=orig duplicate");
	run("Duplicate...", "title=cells duplicate channels=1");
	run("Subtract Background...", "rolling=50 stack");
	setAutoThreshold("RenyiEntropy dark stack");
	run("Convert to Mask", "method=RenyiEntropy background=Dark");
	run("3D Simple Segmentation", "low_threshold=128 min_size=50 max_size=10000"); //set nuclei size
	setThreshold(1, 65535);
	setOption("BlackBackground", false);
	run("Convert to Mask", "method=Default background=Dark");
	run("Invert LUT");
	rename("cellsmask");
	selectWindow("Bin");
	close();
	selectWindow("cells");
	close();

// segment vessels. This will give more than just vessels but will be 
// combined with the cells mask to remove non-overlapping regions.
	selectWindow("orig");
	run("Duplicate...", "title=vessels duplicate channels=2");
	run("Subtract Background...", "rolling=50 stack");
	setAutoThreshold("Moments dark stack");
	run("Convert to Mask", "method=Moments background=Dark");
	run("3D Simple Segmentation", "low_threshold=128 min_size=100 max_size=1000000");// set vessel sizes
	setThreshold(1, 65535);
	setOption("BlackBackground", false);
	run("Convert to Mask", "method=Default background=Dark");
	run("Invert LUT");
	rename("vesselsmask");
	selectWindow("Bin");
	close();
	selectWindow("vessels");
	close();

// use IJPB plugin Morpholibj Morphological reconstruction
	setBatchMode(true);
  selectWindow("cellsmask");
  n = nSlices();
  for (i=1; i<=n; i++) {
     showProgress(i, n);
     selectWindow("cellsmask");
     setSlice(i);
     selectWindow("vesselsmask");
     setSlice(i);
     run("Morphological Reconstruction", "marker=cellsmask mask=vesselsmask type=[By Dilation] connectivity=4");
     if (i==1)
        output = getImageID();
     else {
       run("Select All");
       run("Copy");
       close();
       selectImage(output);
       run("Add Slice");
       run("Paste");
    }
  }
  run("Select None");
  setBatchMode(false);

// make a new image of the segmented vessles on top of the original

	selectWindow("orig");
	run("Split Channels");
	run("Merge Channels...", "c1=C1-orig c2=C2-orig c4=cellsmask-rec create");
	selectWindow("vesselsmask");
	close();
	selectWindow("cellsmask");
	close();
